OpenViBE-Scenario

GDF file reader => #0
  Filename = C:/Program Files (x86)/openvibe/share/openvibe/scenarios/signals/real-hand-movements.gdf
  Samples per buffer = 8
  Subtract physical minimum = False
#0.EEG stream -> Time based epoching => #1
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.2
-> Channel Selector "F3"
  Channel List = F3
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #3
  Spectral components = Amplitude
#3.Amplitude -> Theta band
  Frequencies to select = 4:7
-> Spectrum Average => #5
  Considers zeros = false
#1 -> Channel Selector "Cz"
  Channel List = Cz
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #7
  Spectral components = Amplitude
#7.Amplitude -> Theta band
  Frequencies to select = 4:7
-> Spectrum Average => #9
  Considers zeros = false
#1 -> Channel Selector "F4"
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> Spectral analysis (FFT) => #11
  Spectral components = Amplitude
#11.Amplitude -> Theta band
  Frequencies to select = 4:7
-> Spectrum Average => #13
  Considers zeros = false
Input - A=#5, Input - B=#9, Input - C=#13 -> Simple DSP => #14
  Equation = (a+b+c)/3/500
-> Analog VRPN Server
  Peripheral name = therm
#14 -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#0.EEG stream -> Analog VRPN Server
  Peripheral name = Sinus
Electrode localisation file reader => #18
  Filename = C:/Program Files (x86)/openvibe/share/openvibe/electrode_sets/electrode_set_standard_cartesian.txt
Signal=#0.EEG stream, Channel localization=#18 -> 2D topographic map
  Interpolation type = 1
  Delay (in s) = 0
Signal=#0.EEG stream, Channel localisation=#18 -> 3D topographic map
  Interpolation type = 1
  Delay (in s) = 0
  Face mesh filename = face
  Scalp mesh filename = scalp
  Sphere projection mesh filename = projection_center
